run("Crop");
run("Duplicate...", "title=[] duplicate");
//run("Threshold...");
setAutoThreshold("Default dark");
run("Create Selection");
run("Enlarge...", "enlarge=8 pixel");
run("Make Inverse");
roiManager("Add");
run("Select None");
run("Next Slice [>]");
run("Next Slice [>]");
run("Next Slice [>]");
resetThreshold();
run("Convolve...", "text1=[-1 -1 -1 -1 -1\n-1 -1 -1 -1 -1\n-1 -1 24 -1 -1\n-1 -1 -1 -1 -1\n-1 -1 -1 -1 -1\n] normalize stack");
//run("Threshold...");
setAutoThreshold("Default dark");
run("Create Selection");
run("Enlarge...", "enlarge=1 pixel");
roiManager("Add");
roiManager("Combine");
close();
roiManager("Multi Measure");
